PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test1
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Routines
  Routine trial
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = ('totally disagree','disagree','neutral','agree','totally agree')
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemtext
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  Routine Instruction
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = csv/questions_dutch.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('itemtext', 'Ik had drukke gedachten')]),
      OrderedDict([('itemtext', 'Ik had snel wisselende gedachten')]),
      OrderedDict([('itemtext', 'Ik vond het moeilijk om mijn gedachten vast te houden')]),
      OrderedDict([('itemtext', 'Ik dacht aan anderen')]),
      OrderedDict([('itemtext', 'Ik verplaatste mij in anderen')]),
      OrderedDict([('itemtext', 'Ik dacht aan mensen die ik mag')]),
      OrderedDict([('itemtext', 'Ik dacht aan mijn gevoelens')]),
      OrderedDict([('itemtext', 'Ik dacht aan mijn gedrag')]),
      OrderedDict([('itemtext', 'Ik dacht aan mezelf')]),
      OrderedDict([('itemtext', 'Ik dacht aan dingen die ik moet doen')]),
      OrderedDict([('itemtext', 'I dacht aan het oplossen van problemen')]),
      OrderedDict([('itemtext', 'Ik dacht aan de toekomst')]),
      OrderedDict([('itemtext', 'Ik voelde me moe')]),
      OrderedDict([('itemtext', 'Ik voelde me slaperig')]),
      OrderedDict([('itemtext', 'Ik had moeite met wakker blijven')]),
      OrderedDict([('itemtext', 'Ik voelde me comfortabel')]),
      OrderedDict([('itemtext', 'Ik voelde me ontspannen')]),
      OrderedDict([('itemtext', 'Ik voelde me gelukkig')]),
      OrderedDict([('itemtext', 'Ik was mij bewust van mijn lichaam')]),
      OrderedDict([('itemtext', 'Ik lette op mijn ademhaling')]),
      OrderedDict([('itemtext', 'Ik lette op mijn hartslag')]),
      OrderedDict([('itemtext', 'Ik voelde me ziek')]),
      OrderedDict([('itemtext', 'Ik dacht aan mijn gezondheid')]),
      OrderedDict([('itemtext', 'Ik voelde pijn')]),
      OrderedDict([('itemtext', 'Ik stelde me gebeurtenissen voor')]),
      OrderedDict([('itemtext', 'Ik dacht in beelden')])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
    Routine trial
  LoopTerminator trials
