PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test3
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Routines
  Routine eo
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Eyes Open
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    KeyboardComponent key_resp
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port
      address = /dev/parport0
      disabled = True
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 11
      stopVal [duration (s)] = 180
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
  Routine ec
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Eyes Closed
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    KeyboardComponent key_resp_2
      allowedKeys = 'c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_2
      address = /dev/parport0
      disabled = True
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 21
      stopVal [duration (s)] = 180
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
  Routine reset_lpt
    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    ParallelOutComponent p_port_7
      address = /dev/parport0
      disabled = True
      startData = 0
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
  Routine w
    ImageComponent img_whte
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ParallelOutComponent p_port_3
      address = /dev/parport0
      disabled = True
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.20
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        win.color=[-1, -1, -1]
        if skip_this_routine:
            continueRoutine=False
      End Routine:
        win.color=[0, 0, 0]
  Routine b
    ImageComponent img_black
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ParallelOutComponent p_port_4
      address = /dev/parport0
      disabled = True
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.20
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        win.color=[1, 1, 1]
        if skip_this_routine:
            continueRoutine=False
      End Routine:
        win.color=[0, 0, 0]
  Routine i_eoec
    ParallelOutComponent p_port_5
      address = /dev/parport0
      disabled = True
      startData = 50
      startVal [time (s)] = 0.0
      stopData = 101
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','c','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        This experiment is about thoughts and feelings that you may experience during rest.

        You will be asked to relax with your eyes open for 3 minutes, then closed for 3 minutes.

        Relax, move as little as possible and try not to fall asleep.

        When the time is up, you will be presented with statements on the computer about thoughts and feelings that you may have experienced. Your task is then to indicate the extent to which you agree with the given statements on a scale from "Completely disagree (--)" to "Completely agree (++). If you have any questions about the experiment, please ask them now."
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      End Routine:
        skip_this_routine=False

        if key_resp_3.keys is not None:
            if 's' == key_resp_3.keys:
                skip_this_routine=True

        # print(key_resp_3.keys)
        # print('c' in key_resp_3.keys)
  Routine i_arsq
    TextComponent text_5
      letterHeight = 0.0333
      startVal [time (s)] = 0.0
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      text:
        Now follows a number of statements about possible feelings, physical sensations and thoughts during the eyes-closed rest period.

        Please, indicate the extent to which you agree with each statement using the mouse.

        Press any key to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space','c','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      End Routine:
        skip_this_routine=False

        if key_resp_4.keys is not None:
            if 's' == key_resp_4.keys:
                skip_this_routine=True
    ParallelOutComponent p_port_8
      address = /dev/parport0
      disabled = True
      startData = 50
      startVal [time (s)] = 0.0
      syncScreen = True
      syncScreenRefresh = False
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  Routine question
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = ('--\nfully disagree','-','0\nneutral','+','++\nfully agree')
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemtext
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    ParallelOutComponent p_port_6
      address = /dev/parport0
      disabled = True
      startData = itemnumber + 100
      startVal [time (s)] = 0.0
      stopData = slider.getRating()
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_9
      Code Type = Py
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      Each Frame:
        if slider.getRT() is not None:
            response_time = slider.getRT()
    CodeComponent code_10
      Code Type = Py
      End Routine:
        ISI = core.StaticPeriod()
        ISI.start(0.2)  # start a period of 0.5s
        # stim.image = 'largeFile.bmp'  # could take some time
        ISI.complete()  # finish the 0.5s, taking into account one 60Hz frame
Flow
  Routine i_eoec
  Routine eo
  Routine ec
  LoopInitiator wakeup loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine w
    Routine b
  LoopTerminator wakeup
  Routine i_arsq
  LoopInitiator qustions loopType="TrialHandler"
    conditionsFile = csv/questions_english.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('itemnumber', 1), ('itemtext', 'I had busy thoughts')]),
      OrderedDict([('itemnumber', 2), ('itemtext', 'I had rapidly switching thoughts')]),
      OrderedDict([('itemnumber', 3), ('itemtext', 'I had difficulty holding on to my thoughts')]),
      OrderedDict([('itemnumber', 4), ('itemtext', 'I thought about others')]),
      OrderedDict([('itemnumber', 5), ('itemtext', 'I placed myself in other peoples shoes')]),
      OrderedDict([('itemnumber', 6), ('itemtext', 'I thought about people I like')]),
      OrderedDict([('itemnumber', 7), ('itemtext', 'I thought about my feelings')]),
      OrderedDict([('itemnumber', 8), ('itemtext', 'I thought about my behavior')]),
      OrderedDict([('itemnumber', 9), ('itemtext', 'I thought about myself')]),
      OrderedDict([('itemnumber', 10), ('itemtext', 'I thought about things I need to do')]),
      OrderedDict([('itemnumber', 11), ('itemtext', 'I thought about solving problems')]),
      OrderedDict([('itemnumber', 12), ('itemtext', 'I thought about the future')]),
      OrderedDict([('itemnumber', 13), ('itemtext', 'I felt tired')]),
      OrderedDict([('itemnumber', 14), ('itemtext', 'I felt sleepy')]),
      OrderedDict([('itemnumber', 15), ('itemtext', 'I had difficulty staying awake')]),
      OrderedDict([('itemnumber', 16), ('itemtext', 'I felt comfortable')]),
      OrderedDict([('itemnumber', 17), ('itemtext', 'I felt relaxed')]),
      OrderedDict([('itemnumber', 18), ('itemtext', 'I felt happy')]),
      OrderedDict([('itemnumber', 19), ('itemtext', 'I was conscious of my body')])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
    Routine question
  LoopTerminator qustions
