PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test9
  keyboardBackend = ioHub
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Routines
  Routine ec
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Eyes Closed
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    KeyboardComponent key_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port_2
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 21
      stopVal [duration (s)] = 180
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        # Set Bit 0, Pin 2 of the Output(to Amp) connector
        # port.write([0x01])
        # time.sleep(PulseWidth)

        # Reset Bit 0, Pin 2 of the Output(to Amp) connector
        # port.write([0x00])
        # time.sleep(PulseWidth)
  Routine reset_lpt
    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    ParallelOutComponent p_port_7
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 0
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.05
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
  Routine w
    ImageComponent img_whte
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ParallelOutComponent p_port_3
      address = 0x0378
      disabled = True
      register = EIO
      startData = 1
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.20
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        win.color=[-1, -1, -1]
        if skip_this_routine:
            continueRoutine=False
      End Routine:
        win.color=[0, 0, 0]
    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        # Set Bit 0, Pin 2 of the Output(to Amp) connector
        #port.write([100])
        #time.sleep(PulseWidth)

        # Reset Bit 0, Pin 2 of the Output(to Amp) connector
        #port.write([0x00])
        #time.sleep(PulseWidth)
    CodeComponent code_22
      Code Type = Py
      Before Experiment:
        send_the_code(1)
  Routine b
    ImageComponent img_black
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ParallelOutComponent p_port_4
      address = 0x0378
      disabled = True
      register = EIO
      startData = 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.20
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        win.color=[1, 1, 1]
        if skip_this_routine:
            continueRoutine=False
      End Routine:
        win.color=[0, 0, 0]
    CodeComponent code_23
      Code Type = Py
      Before Experiment:
        send_the_code(2)
  Routine i_eoec
    ParallelOutComponent p_port_5
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 51
      startVal [time (s)] = 0.0
      stopData = 101
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space','c','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        This experiment is about thoughts and feelings that you may experience during rest.

        You will be asked to relax with your eyes open for 3 minutes, then closed for 3 minutes.

        Relax, move as little as possible and try not to fall asleep.

        When the time is up, you will be presented with statements on the computer about thoughts and feelings that you may have experienced. Your task is then to indicate the extent to which you agree with the given statements on a scale from "Completely disagree (--)" to "Completely agree (++). If you have any questions about the experiment, please ask them now."
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      End Routine:
        skip_this_routine=False

        if key_resp_3.keys is not None:
            if 's' == key_resp_3.keys:
                skip_this_routine=True

        # print(key_resp_3.keys)
        # print('c' in key_resp_3.keys)
    TextComponent h_eoec
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = EOEC
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  Routine i_arsq
    TextComponent text_5
      letterHeight = 0.0333
      startVal [time (s)] = 0.0
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      text:
        Now follows a number of statements about possible feelings, physical sensations and thoughts during the eyes-closed rest period.

        Please, indicate the extent to which you agree with each statement using the mouse.

        Press any key to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space','c','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      End Routine:
        skip_this_routine=False

        if key_resp_4.keys is not None:
            if 's' == key_resp_4.keys:
                skip_this_routine=True
    ParallelOutComponent p_port_8
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 52
      startVal [time (s)] = 0.0
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent h_arsq
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = ARSQ
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  Routine question
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = ('--\nfully disagree','-','0\nneutral','+','++\nfully agree')
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemtext
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    ParallelOutComponent p_port_6
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = itemnumber + 100
      startVal [time (s)] = 0.0
      stopData = slider.getRating()
      syncScreen = True
      syncScreenRefresh = True
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_9
      Code Type = Py
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      Each Frame:
        if slider.getRT() is not None:
            response_time = slider.getRT()
    CodeComponent code_10
      Code Type = Py
      End Routine:
        if not skip_this_routine:

            # send the response code plz
            if slider.getRating() is not None:
                send_the_code(int(slider.getRating()))

            ISI = core.StaticPeriod()
            ISI.start(0.2)  # start a period of 0.5s
            # stim.image = 'largeFile.bmp'  # could take some time
            ISI.complete()  # finish the 0.5s, taking into account one 60Hz frame
    KeyboardComponent key_resp_9
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Py
      End Routine:
        if key_resp_9.keys is not None:
            if 's' == key_resp_9.keys:
                skip_this_routine=True
                break
    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        send_the_code(itemnumber + 100)
  Routine nb_trail
    KeyboardComponent trialResp
      allowedKeys = 'space','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent trialSquare
      fillColor = $[1,1,1]
      pos [set every repeat] = (loc1, loc2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent trialFix
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trialCode
      Code Type = Py
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      Begin Experiment:
        gridColor = [1,1,1]
        play_sounds=False
        provide_color_feedback=False
        mySound_goed = sound.Sound('sounds/goed.wav')
        mySound_fout= sound.Sound('sounds/fout.wav')
      Begin Routine:
        gridColor = [1,1,1]
        sound_playing=False
        nback_trig_sent=False
      Each Frame:
        if corrAns == 'space' and (trialResp.keys == 'space'):

            if not nback_trig_sent:
                send_the_code(200 + trialsNum + 10)
                nback_trig_sent=True
            if provide_color_feedback:
                gridColor = [-1.000,1.000,-1.000]

            if not sound_playing and play_sounds:
                sound_playing=True
                mySound_goed.volume=0.6
                mySound_goed.play()


        if not(corrAns == 'space') and (trialResp.keys == 'space'):

            if not nback_trig_sent:

                send_the_code(200 + trialsNum + 11)
                nback_trig_sent=True

            if provide_color_feedback:
                gridColor = [1.000,-1.000,-1.000]

            if not sound_playing and play_sounds:
                sound_playing=True
                mySound_fout.volume=1
                mySound_fout.play()
    PolygonComponent gridLine1
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      pos = (0, 0.3)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine2
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      pos = (0, 0.096)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine3
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      pos = (0, -0.096)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine4
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      pos = (0, -0.3)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine5
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      ori = 90
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine6
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      ori = 90
      pos = (-0.096, 0)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine7
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      ori = 90
      pos = (0.096, 0)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent gridLine8
      fillColor [set every frame] = $gridColor
      lineColor [set every frame] = $gridColor
      lineWidth = 1.5
      ori = 90
      pos = (0.3, 0)
      shape = rectangle
      size = (0.6, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_12
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
            break
      End Routine:
        if trialResp.keys is not None:
            if 's' == trialResp.keys:
                skip_this_routine=True
    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        send_the_code(200+trialsNum)
  Routine nb_end
    TextComponent endText
      letterHeight = 0.033
      startVal [time (s)] = 0.0
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      text:
        This is the end this part of the experiment. Thank you for your time.

        if this is the first session, now the environmental conditions will be changed.

        if this is the second session, we now follow up with a movie.
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_15
      Code Type = Py
      End Routine:
        skip_this_routine=False

        if key_resp_5.keys is not None:
            if 's' == key_resp_5.keys:
                skip_this_routine=True

        # skip_this_routine=False
  Routine i_nback
    TextComponent instrText
      letterHeight = 0.045
      pos = (-0.3,0)
      startVal [time (s)] = 0.0
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    TextComponent h_nback
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 'c','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instrImg
      image = None
      pos [set every repeat] = (0, 0)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    CodeComponent instrCode
      Code Type = Py
      Begin Routine:
        # set the header with and f-string:
        h_nback.text = f'{nbackInstruction } BACK'

        if condsFile == "nBack1Cond.xlsx":
            instrImg.pos = (0.5, -0.3)
            instrImg.image = '1back.png'
            instrText.text = "In this task you will be required to press ‘space’ if the white square appeared in the same location as the location on the last trial. For example if the square was in the left down corner on trial 1 and then it appeared in the same location on trial 2, press ‘space’. Otherwise, do not respond. Press ‘c’ to continue."
        elif condsFile == "nBack2Cond.xlsx":
            instrImg.pos = (0.5, -0.15)
            instrImg.image = '2back.png'
            instrText.text = "This is the end of 1-back trials. You are about to start 2-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on one trial before, you are required to press ‘space’ whenever the square appears in the same position as on the position two trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 3. Press ‘c’ to continue."
        elif condsFile == "nBack3Cond.xlsx":
            instrImg.pos = (0.5, 0)
            instrImg.image = '3back.png'
            instrText.text = "This is the end of 2-back trials. You are about to start 3-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on two trials before, you are required to press ‘space’ whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 4. Press ‘c’ to continue."
        else:
            instrImg.pos = (0.5, 0)
            instrImg.image = '3back.png'
            instrText.text = "This is the end of 2-back trials. You are about to start 3-back trials. This means that instead of pressing ‘space’ whenever the square appears in the same position as on the position on two trials before, you are required to press ‘space’ whenever the square appears in the same position as on the position three trials before. For example if the square appeared in left down corner on trial 1, you should press ‘space’ if the square appears in the left down corner on trial 4. Press ‘c’ to continue."
    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        # continueRoutine=True
        # skip_this_routine=False
      End Routine:
        skip_this_routine=False

        if instrResp.keys is not None:
            if 's' == instrResp.keys:
                skip_this_routine=True

        # print(key_resp_3.keys)
        # print('c' in key_resp_3.keys)
    ParallelOutComponent p_port_9
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = nbackInstruction + 50 + 2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        send_the_code(nbackInstruction + 50 + 2)
  Routine i_movie
    TextComponent text_6
      letterHeight = 0.03333
      startVal [time (s)] = 0.0
      text = Information about Movie
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
      End Routine:
        # skip_this_routine=False
        #
        # if key_resp_6.keys is not None:
        #     if 's' == key_resp_6.keys:
        #        skip_this_routine=True

        # skip_this_routine=False
    ParallelOutComponent p_port_12
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 56
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent h_movie
      letterHeight = 0.05
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      text = Movie
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    CodeComponent code_27
      Code Type = Py
      Begin Routine:
        send_the_code(56)
  Routine the_end
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = This is the end of this run. Thank you!
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ParallelOutComponent p_port_11
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 250
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine showmovie
    ParallelOutComponent p_port_10
      address = /dev/parport0
      disabled = True
      register = EIO
      startData = 200
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    KeyboardComponent key_resp_8
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = movies/Jack_and_the_Beanstalk_512kb.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        send_the_code(200)
  Routine eoc
  Routine oc
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = +
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    KeyboardComponent key_resp_10
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        send_the_code(eocmarker3)
  Routine oci
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $eocinstr
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ParallelOutComponent p_port
      address = 0x0378
      disabled = True
      register = EIO
      startData = 10
      startVal [time (s)] = 0.0
      stopData = 11
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        if skip_this_routine:
            continueRoutine=False
    CodeComponent code_17
      Code Type = Py
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      Before Experiment:
        import serial
        import time
        import threading

        Connected = True
        PulseWidth = 0.01

        def ReadThread(port):
            while Connected:
                if port.inWaiting() > 0:
                    print ("0x%X"%ord(port.read(1)))



        # write a nice little python function that *SENDS* code stuff
        # take the python function(s) that i wrote up for the NF as an example
        # this should send to all (UDP-like) clients that might be listening a code
        # port (not) needed??

        SEND_UDP=True

        if SEND_UDP:
            import socket
            this_socket = socket.socket(socket.AF_INET, socket.SOCK_DGRAM)





        SEND_REAL_CODES=False

        # Open the Windows device manager, search for the "TriggerBox VirtualSerial Port (COM6)"
        # in "Ports /COM & LPT)" and enter the COM port number in the constructor.

        if SEND_REAL_CODES:
            port = serial.Serial('COM3')

            # Start the read thread
            thread = threading.Thread(target=ReadThread, args=(port,))
            thread.start()

            # Set the port to an initial state
            port.write([0x00])
            time.sleep(PulseWidth)

        def send_the_code(code):
            # sending our codes!
            if SEND_REAL_CODES:
                port.write([code])
                time.sleep(0.01)
                port.write([0x00])
            else:
                print(f'THIS CODE: {code}\n')

            if SEND_UDP:
                # TRY IT!
                this_socket.sendto(f'{code}'.encode(), ('30.100.0.1',6500))

        eocmarker1 = 10
        eocmarker2 = 20
        eocmarker3 = 30
      Begin Routine:
        send_the_code(eocmarker1)
      End Experiment:
        # Reset the port to its default state
        #port.write([0xFF])
        #time.sleep(PulseWidth)


        # Terminate the read thread
        #Connected = False
        #thread.join(1.0)

        # Close the serial port
        #port.close()
Flow
  Routine i_eoec
  LoopInitiator eoecloop loopType="TrialHandler"
    conditionsFile = csv/eoc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('eotrial', 1), ('eocinstr', 'eyes open'), ('eocmarker1', 11), ('eocmarker2', 12), ('eocmarker3', 13), ('eocmarker4', 14)]),
      OrderedDict([('eotrial', 2), ('eocinstr', 'eyes closed'), ('eocmarker1', 21), ('eocmarker2', 22), ('eocmarker3', 23), ('eocmarker4', 24)])]
    Routine oci
    Routine oc
  LoopTerminator eoecloop
  LoopInitiator wakeup loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine w
    Routine b
  LoopTerminator wakeup
  Routine i_arsq
  LoopInitiator questions loopType="TrialHandler"
    conditionsFile = csv/questions_english.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('itemnumber', 1), ('itemtext', 'I had busy thoughts')]),
      OrderedDict([('itemnumber', 2), ('itemtext', 'I had rapidly switching thoughts')]),
      OrderedDict([('itemnumber', 3), ('itemtext', 'I had difficulty holding on to my thoughts')]),
      OrderedDict([('itemnumber', 4), ('itemtext', 'I thought about others')]),
      OrderedDict([('itemnumber', 5), ('itemtext', 'I placed myself in other peoples shoes')]),
      OrderedDict([('itemnumber', 6), ('itemtext', 'I thought about people I like')]),
      OrderedDict([('itemnumber', 7), ('itemtext', 'I thought about my feelings')]),
      OrderedDict([('itemnumber', 8), ('itemtext', 'I thought about my behavior')]),
      OrderedDict([('itemnumber', 9), ('itemtext', 'I thought about myself')]),
      OrderedDict([('itemnumber', 10), ('itemtext', 'I thought about things I need to do')]),
      OrderedDict([('itemnumber', 11), ('itemtext', 'I thought about solving problems')]),
      OrderedDict([('itemnumber', 12), ('itemtext', 'I thought about the future')]),
      OrderedDict([('itemnumber', 13), ('itemtext', 'I felt tired')]),
      OrderedDict([('itemnumber', 14), ('itemtext', 'I felt sleepy')]),
      OrderedDict([('itemnumber', 15), ('itemtext', 'I had difficulty staying awake')]),
      OrderedDict([('itemnumber', 16), ('itemtext', 'I felt comfortable')]),
      OrderedDict([('itemnumber', 17), ('itemtext', 'I felt relaxed')]),
      OrderedDict([('itemnumber', 18), ('itemtext', 'I felt happy')]),
      OrderedDict([('itemnumber', 19), ('itemtext', 'I was conscious of my body')])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
    Routine question
  LoopTerminator questions
  LoopInitiator nb_taskloop loopType="TrialHandler"
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condsFile': 'nBack1Cond.xlsx'},
      {'condsFile': 'nBack2Cond.xlsx'},
      {'condsFile': 'nBack3Cond.xlsx'}]
    Routine i_nback
    LoopInitiator nb_trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine nb_trail
    LoopTerminator nb_trials
  LoopTerminator nb_taskloop
  Routine nb_end
  Routine i_movie
  Routine showmovie
  Routine the_end
